<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>Box1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>0</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Enable" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>embeddedGPIOPinState</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="PinFileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName />
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Box2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>1</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Enable" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>embeddedGPIOPinState</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="PinFileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName />
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe2</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Box3</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>2</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Enable" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>embeddedGPIOPinState</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="PinFileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName />
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe3</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Box4</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>3</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Enable" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>embeddedGPIOPinState</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="PinFileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName />
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe4</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>